CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11000

LoadImages:[module_num:1|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notes:["Load the images by matching files in the folder against the unique text pattern '.JPG'"]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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder|.
    Check image sets for missing or duplicate files?:No
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):.JPG
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Orig
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    Rescale intensities?:Yes

ColorToGray:[module_num:2|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notes:['Combine the color image into a grayscale image.']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
    Select the input image:Orig
    Conversion method:Combine
    Image type::RGB
    Name the output image:Gray
    Relative weight of the red channel:1
    Relative weight of the green channel:1
    Relative weight of the blue channel:1
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
Smooth:[module_num:3|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notes:['Smooth the image using a Gaussian filter.']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
    Select the input image:Gray
    Name the output image:Corr
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:20
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
IdentifyPrimaryObjects:[module_num:4|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notes:['Identify the tissue region using three-class Otsu.']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
    Select the input image:Corr
    Name the primary objects to be identified:Tissue
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Otsu Global
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:No
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    Retain outlines of the identified objects?:No
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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    Handling of objects if excessive number of objects identified:Continue
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
MeasureImageAreaOccupied:[module_num:5|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notes:['Measure the area occupied by the tissue region.']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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Tissue
    Retain a binary image of the object regions?:No
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
MeasureObjectSizeShape:[module_num:6|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
    Select objects to measure:Tissue
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:7|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notes:['Export any measurements to a comma-delimited file (.csv). Since the tissue area is an image measurement, it is included in the per-image file.']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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
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    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Summary.csv
    Use the object name for the file name?:No
    Data to export:Tissue
    Combine these object measurements with those of the previous object?:No
    File name:Objects.csv
    Use the object name for the file name?:No
