CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11000

LoadImages:[module_num:1|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notes:["Load the color image by matching files in the folder against the text '.JPG'"]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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|.
    Check image sets for missing or duplicate files?:No
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):1.JPG
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Original
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    Rescale intensities?:Yes

Crop:[module_num:2|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notes:['Crop the color image to exclude the text labels by entering specific cropping coordinates.']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
    Select the input image:Original
    Name the output image:Cropped
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:45,629
    Top and bottom rectangle positions:1,445
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    Remove empty rows and columns?:No
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
ColorToGray:[module_num:3|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notes:['Retain the red channel for later segmentation.']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
    Select the input image:Cropped
    Conversion method:Split
    Image type::RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:No
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    Convert blue to gray?:No
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
ImageMath:[module_num:4|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notes:['Since object identification assumes light objects against a dark background, invert the grayscale intensities of the red channel so the dark areas appear bright and vice versa.']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0
    Set values less than 0 equal to 0?:
    Set values greater than 1 equal to 1?:
    Ignore the image masks?:No
    Name the output image:InvertedRed
    Image or measurement?:Image
    Select the first image:OrigRed
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the individual cells. Three-class thresholding works better than the default two-class method. Some adjustment of the correction factor, smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:InvertedRed
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):5,99999
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:Otsu Global
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0,1
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    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:4
    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:CellOutlines
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:No
    Automatically calculate minimum allowed distance between local maxima?:No
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    Retain outlines of the identified objects?:Yes
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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    Handling of objects if excessive number of objects identified:Continue
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
OverlayOutlines:[module_num:6|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notes:['Overlay the cell outlines in the inverted image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:InvertedRed
    Name the output image:InvertedRedOutlines
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:CellOutlines
    Select outline color:Red

MeasureObjectNeighbors:[module_num:7|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notes:['Obtain neighborhood metrics by expanding the cells until they touch. Retain an output image for later export.']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
    Select objects to measure:Cells
    Method to determine neighbors:Expand until adjacent
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    Retain the image of objects colored by numbers of neighbors for use later in the pipeline (for example, in SaveImages)?:Yes
    Name the output image:ColorNeighbors
    Select colormap:hot
    Retain the image of objects colored by percent of touching pixels for use later in the pipeline (for example, in SaveImages)?:No
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
MeasureObjectSizeShape:[module_num:8|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notes:['Measure morphological features from the cell objects.']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
    Select objects to measure:Cells
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:9|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notes:['Measure intensity features from cell objects against the red channel.']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
    Hidden:1
    Select an image to measure:OrigRed
    Select objects to measure:Cells

SaveImages:[module_num:10|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notes:["Save the neighbor output image as an 8-bit TIF, appending the text 'colorneighbors' to the original filename of the color image."]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
    Select the type of image to save:Image
    Select the image to save:ColorNeighbors
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:_ColorNeighbors
    Select file format to use:tif
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:No
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:11|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notes:["Save the overlay image as an 8-bit TIF, appending the text 'invertedred' to the original filename of the color image."]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
    Select the type of image to save:Image
    Select the image to save:InvertedRedOutlines
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:_InvertedRed
    Select file format to use:tif
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:No
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

ExportToSpreadsheet:[module_num:12|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the cell objects and the image will be saved to separate .csv files. Mean per-image cell measurements will also be exported to the image .csv.']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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
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    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Summary.csv
    Use the object name for the file name?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:Objects.csv
    Use the object name for the file name?:No
